---
API: 3
OpenSesame: 4.0.37
Platform: nt
---
set width 1920
set title "ANT-I"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 1
set psychopy_monitor testMonitor
set psychopy_gamma unchanged
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 26
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\mahou\\Desktop"
set disable_garbage_collection False
set description "A template containing a practice and an experimental phase"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#c0c0c0"

define form_text_input Id_participant
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var ID
	set form_title Identifiant
	set form_question "Identifiant participant :"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define loop block_loop
	set source table
	set skip 0
	set repeat 3
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 48
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 position 70
	setcycle 0 condition congruente
	setcycle 0 indice_orientation -70
	setcycle 0 sens_fleche gauche
	setcycle 0 signal_alerte 1
	setcycle 1 position -70
	setcycle 1 condition congruente
	setcycle 1 indice_orientation -70
	setcycle 1 sens_fleche gauche
	setcycle 1 signal_alerte 1
	setcycle 2 position 70
	setcycle 2 condition incongruente
	setcycle 2 indice_orientation -70
	setcycle 2 sens_fleche gauche
	setcycle 2 signal_alerte 1
	setcycle 3 position -70
	setcycle 3 condition incongruente
	setcycle 3 indice_orientation -70
	setcycle 3 sens_fleche gauche
	setcycle 3 signal_alerte 1
	setcycle 4 position 70
	setcycle 4 condition congruente
	setcycle 4 indice_orientation 70
	setcycle 4 sens_fleche gauche
	setcycle 4 signal_alerte 1
	setcycle 5 position -70
	setcycle 5 condition congruente
	setcycle 5 indice_orientation 70
	setcycle 5 sens_fleche gauche
	setcycle 5 signal_alerte 1
	setcycle 6 position 70
	setcycle 6 condition incongruente
	setcycle 6 indice_orientation 70
	setcycle 6 sens_fleche gauche
	setcycle 6 signal_alerte 1
	setcycle 7 position -70
	setcycle 7 condition incongruente
	setcycle 7 indice_orientation 70
	setcycle 7 sens_fleche gauche
	setcycle 7 signal_alerte 1
	setcycle 8 position 70
	setcycle 8 condition congruente
	setcycle 8 indice_orientation 0
	setcycle 8 sens_fleche gauche
	setcycle 8 signal_alerte 1
	setcycle 9 position -70
	setcycle 9 condition congruente
	setcycle 9 indice_orientation 0
	setcycle 9 sens_fleche gauche
	setcycle 9 signal_alerte 1
	setcycle 10 position 70
	setcycle 10 condition incongruente
	setcycle 10 indice_orientation 0
	setcycle 10 sens_fleche gauche
	setcycle 10 signal_alerte 1
	setcycle 11 position -70
	setcycle 11 condition incongruente
	setcycle 11 indice_orientation 0
	setcycle 11 sens_fleche gauche
	setcycle 11 signal_alerte 1
	setcycle 12 position 70
	setcycle 12 condition congruente
	setcycle 12 indice_orientation -70
	setcycle 12 sens_fleche droite
	setcycle 12 signal_alerte 1
	setcycle 13 position -70
	setcycle 13 condition congruente
	setcycle 13 indice_orientation -70
	setcycle 13 sens_fleche droite
	setcycle 13 signal_alerte 1
	setcycle 14 position 70
	setcycle 14 condition incongruente
	setcycle 14 indice_orientation -70
	setcycle 14 sens_fleche droite
	setcycle 14 signal_alerte 1
	setcycle 15 position -70
	setcycle 15 condition incongruente
	setcycle 15 indice_orientation -70
	setcycle 15 sens_fleche droite
	setcycle 15 signal_alerte 1
	setcycle 16 position 70
	setcycle 16 condition congruente
	setcycle 16 indice_orientation 70
	setcycle 16 sens_fleche droite
	setcycle 16 signal_alerte 1
	setcycle 17 position -70
	setcycle 17 condition congruente
	setcycle 17 indice_orientation 70
	setcycle 17 sens_fleche droite
	setcycle 17 signal_alerte 1
	setcycle 18 position 70
	setcycle 18 condition incongruente
	setcycle 18 indice_orientation 70
	setcycle 18 sens_fleche droite
	setcycle 18 signal_alerte 1
	setcycle 19 position -70
	setcycle 19 condition incongruente
	setcycle 19 indice_orientation 70
	setcycle 19 sens_fleche droite
	setcycle 19 signal_alerte 1
	setcycle 20 position 70
	setcycle 20 condition congruente
	setcycle 20 indice_orientation 0
	setcycle 20 sens_fleche droite
	setcycle 20 signal_alerte 1
	setcycle 21 position -70
	setcycle 21 condition congruente
	setcycle 21 indice_orientation 0
	setcycle 21 sens_fleche droite
	setcycle 21 signal_alerte 1
	setcycle 22 position 70
	setcycle 22 condition incongruente
	setcycle 22 indice_orientation 0
	setcycle 22 sens_fleche droite
	setcycle 22 signal_alerte 1
	setcycle 23 position -70
	setcycle 23 condition incongruente
	setcycle 23 indice_orientation 0
	setcycle 23 sens_fleche droite
	setcycle 23 signal_alerte 1
	setcycle 24 position 70
	setcycle 24 condition congruente
	setcycle 24 indice_orientation -70
	setcycle 24 sens_fleche gauche
	setcycle 24 signal_alerte 0
	setcycle 25 position -70
	setcycle 25 condition congruente
	setcycle 25 indice_orientation -70
	setcycle 25 sens_fleche gauche
	setcycle 25 signal_alerte 0
	setcycle 26 position 70
	setcycle 26 condition incongruente
	setcycle 26 indice_orientation -70
	setcycle 26 sens_fleche gauche
	setcycle 26 signal_alerte 0
	setcycle 27 position -70
	setcycle 27 condition incongruente
	setcycle 27 indice_orientation -70
	setcycle 27 sens_fleche gauche
	setcycle 27 signal_alerte 0
	setcycle 28 position 70
	setcycle 28 condition congruente
	setcycle 28 indice_orientation 70
	setcycle 28 sens_fleche gauche
	setcycle 28 signal_alerte 0
	setcycle 29 position -70
	setcycle 29 condition congruente
	setcycle 29 indice_orientation 70
	setcycle 29 sens_fleche gauche
	setcycle 29 signal_alerte 0
	setcycle 30 position 70
	setcycle 30 condition incongruente
	setcycle 30 indice_orientation 70
	setcycle 30 sens_fleche gauche
	setcycle 30 signal_alerte 0
	setcycle 31 position -70
	setcycle 31 condition incongruente
	setcycle 31 indice_orientation 70
	setcycle 31 sens_fleche gauche
	setcycle 31 signal_alerte 0
	setcycle 32 position 70
	setcycle 32 condition congruente
	setcycle 32 indice_orientation 0
	setcycle 32 sens_fleche gauche
	setcycle 32 signal_alerte 0
	setcycle 33 position -70
	setcycle 33 condition congruente
	setcycle 33 indice_orientation 0
	setcycle 33 sens_fleche gauche
	setcycle 33 signal_alerte 0
	setcycle 34 position 70
	setcycle 34 condition incongruente
	setcycle 34 indice_orientation 0
	setcycle 34 sens_fleche gauche
	setcycle 34 signal_alerte 0
	setcycle 35 position -70
	setcycle 35 condition incongruente
	setcycle 35 indice_orientation 0
	setcycle 35 sens_fleche gauche
	setcycle 35 signal_alerte 0
	setcycle 36 position 70
	setcycle 36 condition congruente
	setcycle 36 indice_orientation -70
	setcycle 36 sens_fleche droite
	setcycle 36 signal_alerte 0
	setcycle 37 position -70
	setcycle 37 condition congruente
	setcycle 37 indice_orientation -70
	setcycle 37 sens_fleche droite
	setcycle 37 signal_alerte 0
	setcycle 38 position 70
	setcycle 38 condition incongruente
	setcycle 38 indice_orientation -70
	setcycle 38 sens_fleche droite
	setcycle 38 signal_alerte 0
	setcycle 39 position -70
	setcycle 39 condition incongruente
	setcycle 39 indice_orientation -70
	setcycle 39 sens_fleche droite
	setcycle 39 signal_alerte 0
	setcycle 40 position 70
	setcycle 40 condition congruente
	setcycle 40 indice_orientation 70
	setcycle 40 sens_fleche droite
	setcycle 40 signal_alerte 0
	setcycle 41 position -70
	setcycle 41 condition congruente
	setcycle 41 indice_orientation 70
	setcycle 41 sens_fleche droite
	setcycle 41 signal_alerte 0
	setcycle 42 position 70
	setcycle 42 condition incongruente
	setcycle 42 indice_orientation 70
	setcycle 42 sens_fleche droite
	setcycle 42 signal_alerte 0
	setcycle 43 position -70
	setcycle 43 condition incongruente
	setcycle 43 indice_orientation 70
	setcycle 43 sens_fleche droite
	setcycle 43 signal_alerte 0
	setcycle 44 position 70
	setcycle 44 condition congruente
	setcycle 44 indice_orientation 0
	setcycle 44 sens_fleche droite
	setcycle 44 signal_alerte 0
	setcycle 45 position -70
	setcycle 45 condition congruente
	setcycle 45 indice_orientation 0
	setcycle 45 sens_fleche droite
	setcycle 45 signal_alerte 0
	setcycle 46 position 70
	setcycle 46 condition incongruente
	setcycle 46 indice_orientation 0
	setcycle 46 sens_fleche droite
	setcycle 46 signal_alerte 0
	setcycle 47 position -70
	setcycle 47 condition incongruente
	setcycle 47 indice_orientation 0
	setcycle 47 sens_fleche droite
	setcycle 47 signal_alerte 0
	run essais

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback True
	run block_loop True
	run consigne_relance_1 "[cycle] < 2"
	run consigne_relance_2 "[cycle] < 2"

define sketchpad consigne_alerte1
	set duration 1700
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="De plus, dans 50% des essais, un signal auditif vous préviendra de l'apparition imminente<br />de l'indice ou des flèches pour les essais sans indices." x=0 y=-256 z_index=0

define sketchpad consigne_alerte2
	set duration keypress
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="De plus, dans 50% des essais, un signal auditif vous préviendra de l'apparition imminente<br />de l'indice ou des flèches pour les essais sans indices." x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_congru
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="La série de flèches peut apparaitre au-dessus ou en-dessous du point de fixation.<br /><br />La flèche centrale peut être orientée vers la gauche (ici en bas) ou la droite (ici en haut).<br /><br />Les 4 flèches qui l'entourent peuvent être : dans le même sens…" x=0 y=-256 z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw image center=1 file="droite_congruente.png" scale=0.01 show_if=True x=0 y=-130 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0
	draw image center=1 file="droite_congruente.png" scale=1 show_if=True x=0 y=-70 z_index=-1
	draw image center=1 file="gauche_congruente.png" scale=1 show_if=True x=0 y=70 z_index=-3
	draw ellipse color="#aaff00" fill=0 h=25 penwidth=3 show_if=True w=25 x=-12 y=-82 z_index=-4
	draw ellipse color="#aaff00" fill=0 h=25 penwidth=3 show_if=True w=25 x=-12 y=58 z_index=-5

define sketchpad consigne_fixation
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Un point de fixation vous sera présenté au centre de l'écran, comme ici.<br /><br />Lorsqu'il est présent seul, nous vous demandons de bien le fixer sans détourner le regard." x=0 y=-260 z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_fleches
	set duration keypress
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Enfin, la ligne de 5 flèches vous sera donc présentée au-dessus ou au-dessous du point de fixation." x=-14 y=-292 z_index=0
	draw image center=1 file="droite_incongruente.png" scale=1 show_if=True x=0 y=-70 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Dans l'exemple ci-dessus, la flèche centrale pointant vers la droite, <br />la réponse appropriée est un appui sur la touche 3." x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_incongru
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Ou dans un sens opposé ..." x=0 y=-256 z_index=0
	draw image center=1 file="droite_incongruente.png" scale=1 show_if=True x=0 y=-70 z_index=0
	draw image center=1 file="gauche_incongruente.png" scale=1 show_if=True x=0 y=70 z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_indice
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Dans 2/3 des essais, un indice vous sera présenté sous la forme d'un astérisque<br />indiquant l'endroit d'apparition des flèches (au-dessus ou en-dessous du point de fixation).<br /><br />Attention, cet indice peut vous induire en erreur !" x=0 y=-280 z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="*" x=0 y=-70 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="*" x=0 y=70 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_lancement
	set duration keypress
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Vous êtes prêt ?" x=0 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour lancer l'expérience." x=-2 y=310 z_index=0

define sketchpad consigne_passation
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Les consignes du test vont vous être présentées peu à peu, <br />prenez le temps de bien les lire.<br />Pour toute question, n'hésitez pas à les exposer à <br />l'expérimentateur avant le lancement de la tâche.<br /><br /><br /><br />Durant cette phase d'explication, vous pouvez passer à la <br />consigne suivante en appuyant sur une des touches <br />de votre pavé numérique." x=0 y=-64 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_relance_1
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Bravo, vous avez réalisé la moitié de la tâche !<br />Vous pouvez prendre quelques minutes avant de recommencer." x=0 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad consigne_relance_2
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Prêt à repartir ?" x=0 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour relancer l'expérience." x=-2 y=310 z_index=0

define sketchpad consigne_reponse
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="5 flèches vont vous être présentées simultanément.<br /><br />Vous devez déterminer le sens de la flèche centrale, sans tenir compte des distracteurs.<br /><br /><br />Si la flèche est orientée vers la gauche, la touche de réponse est le : 1 (touche à gauche)<br /><br />Si la flèche est orientée vers la droite, la touche de réponse est le : 3 (touche à droite)<br /><br /><br />Merci d'utiliser une seule main pour répondre." x=2 y=-259 z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Appuyer sur une touche pour passer." x=-2 y=310 z_index=0

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Félicitation, vous avez terminé !<br /><br />Vous pouvez faire signe à l'expérimentateur <br />et appuyer sur la touche 2 pour interrompre la tâche." x=0 y=0 z_index=0

define sequence essais
	set flush_keyboard yes
	set description "Lance un certain nombre d'éléments en séquence"
	run script_tps True
	run fixation1 True
	run son "[signal_alerte] = 1"
	run trigger_sons True
	run sans_alerte "[signal_alerte] = 0"
	run fixation2 True
	run trigger_indice True
	run indice "[indice_orientation] != 0"
	run sans_indice "[indice_orientation] = 0"
	run fixation3 True
	run signal True
	run trigger_stim True
	run keyboard_response True
	run trigger_rep True disabled
	run fixation_fin True
	run logger True

define sampler ex_son
	set volume 1
	set stop_after 0
	set sample "pi.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lit un fichier audio au format .wav ou .ogg"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run test_mode True
	run Id_participant "[test_mode] != \"y\""
	run trigger_init True
	run consigne_passation "[test_mode] != \"y\""
	run consigne_fixation "[test_mode] != \"y\""
	run consigne_reponse "[test_mode] != \"y\""
	run consigne_congru "[test_mode] != \"y\""
	run consigne_incongru "[test_mode] != \"y\""
	run consigne_indice "[test_mode] != \"y\""
	run consigne_alerte1 "[test_mode] != \"y\""
	run ex_son "[test_mode] != \"y\""
	run consigne_alerte2 "[test_mode] != \"y\""
	run consigne_fleches "[test_mode] != \"y\""
	run consigne_lancement "[test_mode] != \"y\""
	run experimental_loop True
	run trigger_stop True
	run end_of_experiment True

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 2
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if False
	setcycle 0 cycle 1
	setcycle 1 cycle 2
	run block_sequence

define sketchpad fixation1
	set start_response_interval no
	set duration "[tps_fix]"
	set description "A sketchpad containing the instructions for the participant"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation2
	set start_response_interval no
	set duration 390
	set description "A sketchpad containing the instructions for the participant"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation3
	set start_response_interval no
	set duration 100
	set description "A sketchpad containing the instructions for the participant"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad fixation_fin
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad indice
	set duration 90
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=True text="*" x=0 y="[indice_orientation].0" z_index=0

define keyboard_response keyboard_response
	set timeout 1700
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "num_1;num_3"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log ID
	log acc
	log condition
	log correct
	log correct_response
	log cycle
	log indice_orientation
	log live_row
	log position
	log response
	log response_keyboard_response
	log response_time
	log response_time_keyboard_response
	log sens_fleche
	log signal_alerte
	log time_essais
	log time_fixation1
	log time_fixation2
	log time_fixation3
	log time_fixation_fin
	log time_indice
	log time_keyboard_response
	log time_logger
	log time_sans_alerte
	log time_sans_indice
	log time_script_tps
	log time_signal
	log time_son
	log time_test_mode
	log time_trigger_indice
	log time_trigger_init
	log time_trigger_rep
	log time_trigger_sons
	log time_trigger_stim
	log title
	log tps_fix
	log total_correct
	log total_response_time
	log average_response_time
	exclude "*_backend"
	exclude PERSISTENT
	exclude TEMPORARY
	exclude accuracy
	exclude average_response_time
	exclude avg_rt
	exclude background
	exclude closed
	exclude "count_*"
	exclude credentialless
	exclude crossOriginIsolated
	exclude datetime
	exclude description
	exclude devicePixelRatio
	exclude disable_garbage_collection
	exclude experiment_file
	exclude experiment_path
	exclude "font_*"
	exclude foreground
	exclude form_clicks
	exclude fullscreen
	exclude height
	exclude innerHeight
	exclude innerWidth
	exclude isSecureContext
	exclude length
	exclude logfile
	exclude opensesame_codename
	exclude origin
	exclude originAgentCluster
	exclude outerHeight
	exclude outerWidth
	exclude "page?Offset"
	exclude round_decimals
	exclude "screen*"
	exclude "scroll?"
	exclude "sound_*"
	exclude start
	exclude status
	exclude total_correct
	exclude total_response_time
	exclude total_responses
	exclude width
	exclude "correct_consigne_*"
	exclude "response_consigne_*"
	exclude "response_time_consigne_*"
	exclude opensesame_version
	exclude response_Relance
	exclude response_end_of_experiment7
	exclude response_time_Relance
	exclude response_time_end_of_experiment
	exclude time_Id_participant
	exclude time_Relance
	exclude time_block_loop
	exclude time_block_sequence
	exclude "time_consigne_*"
	exclude time_end_of_experiment
	exclude time_ex_son
	exclude time_experiment
	exclude time_experimental_loop
	exclude time_script_prepa
	exclude form_response
	exclude correct_keyboard_response
	exclude "live_row_*"
	exclude "psychopy_*"
	exclude repeat_cycle
	exclude response_end_of_experiment
	exclude "subject_*"
	exclude test_mode
	exclude time_reset_feedback
	exclude time_trigger_stop

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad sans_alerte
	set start_response_interval no
	set duration 50
	set description "Displays stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sketchpad sans_indice
	set duration 90
	set description "Affiche les stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define inline_script script_tps
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	import random
	#generates a list of possible durations from 500 to 1000ms
	tps_fixP = range(400,1600,100)
	tps_fix = random.choice(tps_fixP)
	var.tps_fix = tps_fix
	
	if sens_fleche == "gauche" : 
	    correct_response = "num_1"
	else : correct_response = "num_3"
	__end__

define sketchpad signal
	set duration 0
	set description "Affiche les stimuli"
	draw image center=1 file="[sens_fleche]_[condition].png" scale=1 show_if=True x=0 y="[position].0" z_index=0
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0
	draw rect color="#ffffff" fill=1 h=-130 penwidth=1 show_if=True w=-120 x=960 y=544 z_index=0

define sampler son
	set volume 1
	set stop_after 0
	set sample "pi.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lit un fichier audio au format .wav ou .ogg"

define form_text_input test_mode
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var test_mode
	set form_title test
	set form_question "Test mode :"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_script trigger_indice
	set description "Exécute du code Python"
	___run__
	if indice_orientation != 0 :
	    dev.activate_line(lines = [7])
	__end__
	set _prepare ""

define inline_script trigger_init
	set description "Exécute du code Python"
	___run__
	import pyxid2
	
	dev = pyxid2.get_xid_devices()[0]
	dev.set_pulse_duration(25)
	__end__
	___prepare__
	
	'''
	from math import atan2, degrees
	from PIL import Image
	
	h = 25           # Hauteur du moniteur en cm
	l = 00           # Largeur du moniteur en cm
	d = 60           # Distance entre le moniteur et le participant en cm
	r_h = 1200       # Résolution verticale du moniteur
	r_l = 1920       # Résolution horizontale du moniteur
	size_in_deg_fleche = 3. # angle visuel du stimulus (ici les 5 flèches)
	size_in_deg_posi = 1.03
	# Calculez le nombre de degrés qui correspondent à un seul pixel. Cela sera
	# généralement une valeur très petite, quelque chose comme 0,03.
	deg_per_px = degrees(atan2(.5 * h, d)) / (.5 * r_h)
	#print(f'{deg_per_px} degrés correspondent à un seul pixel')
	# Calculez la taille du stimulus en degrés
	
	def calcule_pixel(size_in_deg,deg_per_px=deg_per_px):
	    size_in_px = size_in_deg / deg_per_px
	    #print(f'La taille du stimulus est de {size_in_px} pixels et {size_in_deg} degrés visuels')
	    return size_in_px
	
	
	my_canvas = Canvas()
	# Déterminer le chemin absolu :
	path = exp.pool['droite_congruente.png']
	# Interface de fonction
	my_canvas.image(path)
	# Interface d'élément
	my_canvas['my_image'] = Image(path)
	'''
	
	
	'''
	var.image_width = calcule_pixel(size_in_deg_fleche)
	var.image_height = calcule_pixel(size_in_deg_fleche/5)
	var.position_px = calcule_pixel(size_in_deg_posi)
	
	
	image_path = "Users\mahou\Desktop\OpenSesame\MesExpé\droite_congruente.png" # Chemin vers l'image originale
	image_name = "droite_congruente.png"
	output_path = "resized_image.png"  # Chemin vers l'image redimensionnée
	
	original_image = Image.open(image_path)
	resized_image = original_image.resize((image_width, image_height), Image.ANTIALIAS)
	resized_image.save(output_path)
	'''
	__end__

define inline_script trigger_rep
	set description "Exécute du code Python"
	___run__
	if response_keyboard_response == correct_response :
	    dev.activate_line(lines = 5)
	else : dev.activate_line(lines = [5,6])
	
	print (live_row)
	__end__
	set _prepare ""

define inline_script trigger_sons
	set description "Exécute du code Python"
	___run__
	if signal_alerte == 1 :
	    dev.activate_line(lines = 5)
	elif signal_alerte == 0 :
	    dev.activate_line(lines = [6])
	
	
	'''
	if signal_alerte == 1 :
	    dev.activate_line(lines = 6)
	    
	elif signal_alerte == 0 :
	    dev.activate_line(lines = [6,7])
	    
	else :
	    print("probleme" + signal_alerte)
	'''
	__end__
	set _prepare ""

define inline_script trigger_stim
	set description "Exécute du code Python"
	___run__
	dev.activate_line(lines = [8])
	__end__
	set _prepare ""

define inline_script trigger_stop
	set description "Exécute du code Python"
	___run__
	del dev
	 
	__end__
	set _prepare ""

